outputPath = "/Users/jenaalsup/Desktop/18s2z9-segmentation.csv"; // change this to be the day / series of interest

// duplicate and isolate DAPI channel
run("Duplicate...", "duplicate channels=1 title=Segmentation duplicate"); // pass in DAPI (channels=1) or SOX2 (channels=5)selectWindow("Segmentation");

// projection prep
run("8-bit");

// pre-threshold smoothing
run("Gaussian Blur...", "sigma=0.8");
run("Despeckle"); // remove high frequency noise
run("Close"); // smooth jagged borders

// apply fixed threshold
setThreshold(75, 255); 
run("Convert to Mask");

// post-threshold smoothing
run("Dilate");

run("Options...", "iterations=1 count=1 black do=Open");
run("Options...", "iterations=1 count=1 black do=Close");

run("Median...", "radius=1"); // smooth edges while preserving shape
run("Analyze Particles...", "size=0-24 show=Nothing clear");
run("Fill Holes");
run("Watershed");

// particle analysis (labeling)
run("Set Measurements...", "area centroid fit shape display redirect=None decimal=2");
roiManager("reset");
run("Analyze Particles...", "size=25-300 circularity=0.00-1.00 show=Overlay display clear include add");
roiManager("Deselect");
roiManager("Show All with labels");

// save results to CSV (update the path and filename as needed)
saveAs("Results", outputPath);
